CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723163113
GitHash:36df52d
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:DNA
    Name the output image:FilteredImage
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Identify blobs from current base. ']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
    Select the input image:FilteredImage
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):7,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:3
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucleiOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.02
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
ConvertObjectsToImage:[module_num:7|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
    Select the input objects:Nuclei
    Name the output image:NucleiLabel
    Select the color format:uint16
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DNA
    Number of pixels by which to expand the primary objects:20
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    Name the outline image:CellOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
ConvertObjectsToImage:[module_num:9|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
    Select the input objects:Cells
    Name the output image:CellLabel
    Select the color format:uint16
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
GrayToColor:[module_num:10|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notes:['Only to visualize the identified objects before image registration.']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
    Select a color scheme:RGB
    Select the image to be colored red:CellOutlines
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    Select the image to be colored blue:NucleiOutlines
    Name the output image:overlayOutlines
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
MeasureObjectSizeShape:[module_num:11|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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:Nuclei|Location_Center_Y,Nuclei|Location_Center_X,Nuclei|AreaShape_Area,Cells|Location_Center_Y,Cells|Location_Center_X,Cells|AreaShape_Area
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::
    Overwrite without warning?:No
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:NucleiLabel
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:NucleiLabel_
    Number of digits:2
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    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Segmentation
    Image bit depth:16
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:CellLabel
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:CellLabel_
    Number of digits:2
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    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Segmentation
    Image bit depth:16
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:overlayOutlines
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:overlayOutlines_
    Number of digits:2
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|Outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Select colormap:Spectral
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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